PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['scripts_1_2_3_.csv', 'demographic_survey.json']
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = portuguese_valence
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine questionnaire
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    CodeComponent code_questionnaire
      Code Type = Auto->JS
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      Begin Experiment:
        import json
        import re

        with open(os.path.join(_thisDir, 'demographic_survey.json'), 'r', encoding='utf-8') as _qFile:
            _questionnaireData = json.load(_qFile)
        _questionnairePages = _questionnaireData['pages']

        _QUESTIONNAIRE_DECLINE = 'Afirmo que li e não desejo participar do experimento.'


        def _qStripHtml(html):
            text = html
            for tag, repl in (
                ('</p>', '\n\n'), ('<br>', '\n'), ('<br/>', '\n'), ('<br />', '\n'),
                ('</div>', '\n'), ('</li>', '\n'),
                ('</h1>', '\n'), ('</h2>', '\n'), ('</h3>', '\n'),
            ):
                text = text.replace(tag, repl)
            text = re.sub(r'<[^>]+>', '', text)
            text = re.sub(r'\n{3,}', '\n\n', text)
            return text.strip()


        def _qEvalVisibleIf(expr, responses):
            if not expr:
                return True
            for clause in expr.split(' and '):
                m = re.match(r"\{(\w+)\}\s*=\s*'([^']*)'", clause.strip())
                if m and responses.get(m.group(1)) != m.group(2):
                    return False
            return True


        def _qNextVisiblePage(fromIdx, responses):
            for idx in range(fromIdx, len(_questionnairePages)):
                if _qEvalVisibleIf(_questionnairePages[idx].get('visibleIf'), responses):
                    return idx
            return None


        def _qItem(idx, itemType, text, options=None, layout='vert'):
            return {
                'index': idx,
                'itemText': text,
                'itemWidth': 0.7,
                'type': itemType,
                'responseWidth': 0.3,
                'options': options if options is not None else [],
                'layout': layout,
            }


        def _qRatingOptions(el):
            rmin = el.get('rateMin', 1)
            rmax = el.get('rateMax', 5)
            opts = [''] * (rmax - rmin + 1)
            opts[0] = el.get('minRateDescription', str(rmin))
            opts[-1] = el.get('maxRateDescription', str(rmax))
            return opts


        def _qBuildPage(page):
            items = []
            meta = []
            titleParts = []
            if page.get('title'):
                titleParts.append(page['title'])
            if page.get('description'):
                titleParts.append(page['description'])

            idx = 0
            for el in page['elements']:
                etype = el['type']
                name = el['name']
                label = el.get('title', name)

                if etype == 'html':
                    titleParts.append(_qStripHtml(el['html']))

                elif etype == 'radiogroup':
                    choices = list(el.get('choices', []))
                    if el.get('showOtherItem'):
                        otherLabel = el.get('otherText', 'Outro')
                        items.append(_qItem(idx, 'choice', label, choices + [otherLabel]))
                        choiceIdx = idx
                        idx += 1
                        items.append(_qItem(idx, 'free text',
                                             'Se "%s", especifique:' % otherLabel))
                        meta.append({'kind': 'radio_other', 'name': name,
                                      'choiceItem': choiceIdx, 'otherItem': idx,
                                      'otherLabel': otherLabel})
                        idx += 1
                    else:
                        items.append(_qItem(idx, 'choice', label, choices))
                        meta.append({'kind': 'choice', 'name': name, 'item': idx})
                        idx += 1

                elif etype == 'checkbox':
                    choices = list(el.get('choices', []))
                    choiceItems = []
                    for choice in choices:
                        items.append(_qItem(idx, 'choice', '%s — %s' % (label, choice),
                                             ['Sim', 'Não'], layout='horiz'))
                        choiceItems.append((idx, choice))
                        idx += 1
                    otherItem = None
                    otherLabel = None
                    if el.get('showOtherItem'):
                        otherLabel = el.get('otherText', 'Outro')
                        items.append(_qItem(idx, 'free text',
                                             '%s (opcional): especifique' % otherLabel))
                        otherItem = idx
                        idx += 1
                    meta.append({'kind': 'checkbox', 'name': name,
                                  'choiceItems': choiceItems,
                                  'otherItem': otherItem, 'otherLabel': otherLabel})

                elif etype == 'rating':
                    items.append(_qItem(idx, 'rating', label, _qRatingOptions(el)))
                    meta.append({'kind': 'rating', 'name': name, 'item': idx})
                    idx += 1

                elif etype == 'text':
                    items.append(_qItem(idx, 'free text', label))
                    kind = 'text'
                    extra = {}
                    for v in el.get('validators', []):
                        if v.get('type') == 'numeric':
                            kind = 'numeric'
                            extra['min'] = v.get('minValue')
                            extra['max'] = v.get('maxValue')
                        elif v.get('type') == 'email':
                            kind = 'email'
                    entry = {'kind': kind, 'name': name, 'item': idx}
                    entry.update(extra)
                    meta.append(entry)
                    idx += 1

            return items, meta, '\n\n'.join(titleParts)


        def _qPageComplete(data, meta):
            optional = set()
            for m in meta:
                if m['kind'] == 'radio_other':
                    optional.add(m['otherItem'])
                elif m['kind'] == 'checkbox' and m['otherItem'] is not None:
                    optional.add(m['otherItem'])
            for i, d in enumerate(data):
                if i in optional:
                    continue
                if str(d.get('response', '')).strip() == '':
                    return False
            return True


        def _qValidatePage(form, meta):
            data = form.getData()
            if not _qPageComplete(data, meta):
                return False, 'Por favor, responda todas as perguntas desta página.'
            for m in meta:
                if m['kind'] == 'numeric':
                    resp = str(data[m['item']].get('response', '')).strip()
                    if not resp.isdigit() or not (m['min'] <= int(resp) <= m['max']):
                        return False, 'Este campo só aceita números entre %d e %d.' % (m['min'], m['max'])
                elif m['kind'] == 'email':
                    resp = str(data[m['item']].get('response', '')).strip()
                    if not re.match(r'^[^@\s]+@[^@\s]+\.[^@\s]+$', resp):
                        return False, 'Por favor, insira um e-mail válido.'
            return True, ''


        def _qExtractPage(form, meta, responses):
            data = form.getData()
            for m in meta:
                if m['kind'] == 'numeric':
                    responses[m['name']] = int(str(data[m['item']].get('response', '')).strip())
                elif m['kind'] in ('choice', 'rating', 'text', 'email'):
                    responses[m['name']] = data[m['item']].get('response', '')
                elif m['kind'] == 'radio_other':
                    choice = data[m['choiceItem']].get('response', '')
                    other = str(data[m['otherItem']].get('response', '')).strip()
                    if choice == m['otherLabel'] and other:
                        responses[m['name']] = other
                    else:
                        responses[m['name']] = choice
                elif m['kind'] == 'checkbox':
                    selected = []
                    for itemIdx, choiceLabel in m['choiceItems']:
                        if data[itemIdx].get('response', '') == 'Sim':
                            selected.append(choiceLabel)
                    if m['otherItem'] is not None:
                        other = str(data[m['otherItem']].get('response', '')).strip()
                        if other:
                            selected.append(other)
                    responses[m['name']] = selected


        def _qShowPage(idx):
            page = _questionnairePages[idx]
            items, meta, titleText = _qBuildPage(page)
            questionnaireTitleStim.text = titleText
            questionnaireErrorStim.text = ''
            form = visual.Form(
                win=win, name='questionnaireForm', items=items,
                size=(1.6, 0.72), pos=(0, -0.06), itemPadding=0.05,
                textHeight=0.022, font='Open Sans', units='height'
            )
            key_resp_questionnaire.keys = []
            key_resp_questionnaire.clearEvents()
            return page, form, meta
      Begin Routine:
        questionnaireResponses = {}
        questionnaireDeclined = False
        questionnairePageIdx = _qNextVisiblePage(0, questionnaireResponses)

        questionnaireTitleStim = visual.TextStim(
            win=win, name='questionnaire_title', text='', font='Open Sans',
            pos=(0, 0.40), height=0.022, wrapWidth=1.6, color='black',
            alignText='center', units='height'
        )
        questionnaireErrorStim = visual.TextStim(
            win=win, name='questionnaire_error', text='', font='Open Sans',
            pos=(0, -0.46), height=0.022, wrapWidth=1.6, color='red',
            alignText='center', units='height'
        )
        questionnaireHintStim = visual.TextStim(
            win=win, name='questionnaire_hint',
            text='Pressione ENTER para confirmar e avançar para a próxima página.',
            font='Open Sans', pos=(0, -0.49), height=0.018, wrapWidth=1.6,
            color='grey', alignText='center', units='height'
        )

        questionnairePage, questionnaireForm, questionnaireMeta = _qShowPage(questionnairePageIdx)
      Each Frame:
        questionnaireForm.draw()
        questionnaireTitleStim.draw()
        questionnaireErrorStim.draw()
        questionnaireHintStim.draw()

        _qKeys = key_resp_questionnaire.getKeys(keyList=['return'], waitRelease=False)
        if len(_qKeys):
            _qOk, _qMsg = _qValidatePage(questionnaireForm, questionnaireMeta)
            if not _qOk:
                questionnaireErrorStim.text = _qMsg
                key_resp_questionnaire.clearEvents()
            else:
                _qExtractPage(questionnaireForm, questionnaireMeta, questionnaireResponses)
                if questionnairePage['name'] == 'page_consentimento' and \
                        questionnaireResponses.get('consentimento') == _QUESTIONNAIRE_DECLINE:
                    questionnaireDeclined = True
                    continueRoutine = False
                else:
                    _qNextIdx = _qNextVisiblePage(questionnairePageIdx + 1, questionnaireResponses)
                    if _qNextIdx is None:
                        continueRoutine = False
                    else:
                        questionnairePageIdx = _qNextIdx
                        questionnairePage, questionnaireForm, questionnaireMeta = _qShowPage(questionnairePageIdx)
      End Routine:
        for _qKey, _qVal in questionnaireResponses.items():
            thisExp.addData('questionnaire_%s' % _qKey, _qVal)

        if questionnaireDeclined:
            thisExp.nextEntry()
            core.quit()
    KeyboardComponent key_resp_questionnaire
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instructions_text
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Instruções


        Na tela seguinte você verá uma palavra e deverá julgá-la na escala de acordo com a forma que você se sente, sendo 01 o mais negativo e 7 o mais positivo.

        Você terá cerca de 15 segundos para avaliar cada palavra.

        Vamos começar com um treinamento.


        Pressione ESPAÇO para continuar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Sorteia um número entre 1 e 3
        escolha = list([1, 2, 3])
        shuffle(escolha)
        script_selecionado = escolha[0]

        # Define o intervalo de linhas baseado no sorteio (índices começam em 0)
        # No PsychoPy, a linha 2 da planilha costuma ser o índice 0.
        if script_selecionado == 1:
            minhas_linhas = '0:158'  # Linhas 2 a 159
        elif script_selecionado == 2:
            minhas_linhas = '158:316' # Linhas 160 a 317
        else:
            minhas_linhas = '316:473' # Linhas 318 a 474
  Routine valence
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    TextComponent stim_text
      color = black
      letterHeight = 50
      pos = (0, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $palavra
      wrapWidth = 100
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    SliderComponent slider
      borderColor = Black
      color = Black
      durationEstim = 15
      forceEndRoutine = True
      granularity = 1
      labels = ("1- Muito Negativo", "2", "3", "4", "5", "6", "7- Muito Positivo")
      letterHeight = 25
      pos = (0, -100)
      size = (1200, 50)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine end
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    TextComponent end_text
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      wrapWidth = 1200
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      text:
        Obrigada por sua participação.


        Por favor, aguarde enquanto as suas respostas estão sendo salvas.
  Routine buffer
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    TextComponent buffer_text
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine treino
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    TextComponent stim_treino
      color = black
      letterHeight = 50
      pos = (0, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $Palavra
      wrapWidth = 100
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    SliderComponent slider_treino
      borderColor = Black
      color = Black
      fillColor = $(0.0000, 0.0000, 0.0000)
      forceEndRoutine = True
      granularity = 1
      labels = ("1- Muito Negativo", "2", "3", "4", "5", "6", "7- Muito Positivo")
      letterHeight = 25
      pos = (0, -100)
      size = (1200, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine instructions_2
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    TextComponent instructions_text_2
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Instruções


        Finalizamos o treinamento.

        Agora você deverá julgar uma lista de palavras que virá a seguir.

        Lembre-se, você terá 15 segundos para avaliar cada palavra.


        Pressione ESPAÇO para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine buffer_treino
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    TextComponent buffer_treino_text
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine questionnaire
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Palavra': 'miojo'},
      {'Palavra': 'paçoca'},
      {'Palavra': 'guardanapo'}]
    Routine buffer_treino
    Routine treino
  LoopTerminator trials_2
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $minhas_linhas
    conditionsFile = scripts_1_2_3_.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'p00001'), ('palavra', 'aberta'), ('ordem', np.float64(4596.0)), ('ocorrências', 2.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'adjetivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00004'), ('palavra', 'abranger'), ('ordem', np.float64(4293.0)), ('ocorrências', 1036.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'verbo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'sim'), ('banda', np.float64(5.0)), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00007'), ('palavra', 'acordar'), ('ordem', np.float64(1955.0)), ('ocorrências', 4.306), ('corpus_frequencia', 'linguateca'), ('classificação', 'verbo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00010'), ('palavra', 'alfaiataria'), ('ordem', None), ('ocorrências', 235.0), ('corpus_frequencia', 'linguateca'), ('classificação', 'substantivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))]),
      OrderedDict([('item', 'p00013'), ('palavra', 'alto'), ('ordem', np.float64(231.0)), ('ocorrências', 31.736), ('corpus_frequencia', 'linguateca'), ('classificação', 'adjetivo'), ('rastreador', 'não'), ('texto', None), ('TVLPB', 'nao'), ('banda', None), ('script', np.int64(1))])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
    Routine buffer
    Routine valence
  LoopTerminator trials
  Routine end
